CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Nuclei")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Membrane")
    Name to assign these images:Membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Nucleus
    Name the output image:Nucleus_Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Mouse
    Apply which cycle's cropping pattern?:First
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:Membrane
    Name the output image:Membrane_Crop
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:Nucleus_Crop
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
RescaleIntensity:[module_num:7|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
    Select the input image:Nucleus_Crop
    Name the output image:RescaleNucleus
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:Membrane_Crop
    Name the output image:RescaleMembrane
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceEdges:[module_num:9|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
    Select the input image:RescaleNucleus
    Name the output image:Nuclei_Edge
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:RescaleNucleus
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuclei_Edge
    Multiply the second image by:1.0
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
GaussianFilter:[module_num:11|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
    Select the input image:ImageAfterMath
    Name the output image:GaussianFilter_Nucleus
    Sigma:1

Erosion:[module_num:12|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
    Select the input image:GaussianFilter_Nucleus
    Name the output image:Erosion
    Structuring element:disk,2

ReduceNoise:[module_num:13|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
    Select the input image:Erosion
    Name the output image:ReduceNoise
    Size:6
    Distance:11
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:ReduceNoise
    Name the primary objects to be identified:IdentifyPrimaryObjects_Noise
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:15|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enabled:False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
    Select the input image:ReduceNoise
    Name the output image:Binary_Nuclei_Noise
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:16|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enabled:False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
    Select the input image:GaussianFilter_Nucleus
    Name the output image:Binary_Nuclei_Gaus
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:17|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enabled:False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
    Select the input image:Erosion
    Name the output image:Binary_Nuclei_Erosion
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:18|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enabled:False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
    Select the input image:Binary_Nuclei_Gaus
    Name the primary objects to be identified:Nuclei_objects
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:19|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enabled:False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
    Select the input image:Binary_Nuclei_Erosion
    Name the primary objects to be identified:Nuclei_objects
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

EditObjectsManually:[module_num:20|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
    Select the objects to be edited:IdentifyPrimaryObjects_Noise
    Name the edited objects:Nuclei_objects_edited
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:RescaleNucleus
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:Nuclei_objects_edited
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

Threshold:[module_num:22|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
    Select the input image:RescaleMembrane
    Name the output image:Binary_Membrane
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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
ImageMath:[module_num:23|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Nuceus_Membrane_Merge
    Image or measurement?:Image
    Select the first image:RescaleMembrane
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RescaleNucleus
    Multiply the second image by:2
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
IdentifyObjectsManually:[module_num:24|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
    Select the input image:Nuceus_Membrane_Merge
    Name the objects to be identified:Apical_Lumen

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:Apical_Lumen
    Name the output image:LumenImage
    Select the color format:Grayscale
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
MaskImage:[module_num:26|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
    Select the input image:Binary_Membrane
    Name the output image:Mask_Apical_Lumen
    Use objects or an image as a mask?:Objects
    Select object for mask:Apical_Lumen
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    Invert the mask?:Yes

ImageMath:[module_num:27|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Membrane_Apical_Mask
    Image or measurement?:Image
    Select the first image:Mask_Apical_Lumen
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RescaleMembrane
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:28|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
    Select the input objects:Nuclei_objects_edited
    Name the objects to be identified:Cells_Nucleus_Membrane1
    Select the method to identify the secondary objects:Propagation
    Select the input image:Mask_Apical_Lumen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
EditObjectsManually:[module_num:29|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
    Select the objects to be edited:Cells_Nucleus_Membrane1
    Name the edited objects:Edited_Cells
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:CellImage
    Allow overlapping objects?:No

MeasureObjectNeighbors:[module_num:30|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
    Select objects to measure:Edited_Cells
    Select neighboring objects to measure:Edited_Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:Cell_Neighbors
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:Greens

MeasureObjectNeighbors:[module_num:31|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
    Select objects to measure:Nuclei_objects_edited
    Select neighboring objects to measure:Nuclei_objects_edited
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:Nuclei_Neighbors
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:32|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
    Select objects to measure:Edited_Cells
    Select neighboring objects to measure:Apical_Lumen
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:Apical_Neighbors
    Select colormap:Reds
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:Default

MeasureObjectSizeShape:[module_num:33|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
    Select objects to measure:Nuclei_objects_edited
    Calculate the Zernike features?:Yes

TrackObjects:[module_num:34|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
    Choose a tracking method:Overlap
    Select the objects to track:Nuclei_objects_edited
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    Maximum pixel distance to consider matches:10
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNucleiOverlap10
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    Filter objects by lifetime?:No
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
TrackObjects:[module_num:35|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
    Choose a tracking method:Overlap
    Select the objects to track:Edited_Cells
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    Maximum pixel distance to consider matches:10
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCellsOverlap10
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    Filter objects by lifetime?:No
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
TrackObjects:[module_num:36|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
    Choose a tracking method:Overlap
    Select the objects to track:Apical_Lumen
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    Maximum pixel distance to consider matches:10
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedLumenOverlap10
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    Filter objects by lifetime?:No
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
ImageMath:[module_num:37|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Nuclei_and_Lumen
    Image or measurement?:Image
    Select the first image:TrackedLumenOverlap10
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:TrackedNucleiOverlap10
    Multiply the second image by:1.0
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:TrackedNucleiOverlap10
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:TrackNucleiOverlap
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|June5_Pos3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:TrackedCellsOverlap10
    Select method for constructing file names:Sequential numbers
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    Enter single file name:TrackCellsOverlap
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|June5_Pos3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_and_Lumen
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Lumen
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|June5_Pos3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:41|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents/TestincCellProfiler/LowDensity_Validation_Video10_Cyst1/Tracking_Lumen
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Apical_Lumen|TrackObjects_ParentObjectNumber_10,Apical_Lumen|TrackObjects_IntegratedDistance_10,Apical_Lumen|TrackObjects_DistanceTraveled_10,Apical_Lumen|TrackObjects_Linearity_10,Apical_Lumen|TrackObjects_Displacement_10,Apical_Lumen|TrackObjects_Label_10,Apical_Lumen|TrackObjects_ParentImageNumber_10,Apical_Lumen|TrackObjects_FinalAge_10,Apical_Lumen|TrackObjects_Lifetime_10,Apical_Lumen|TrackObjects_TrajectoryX_10,Apical_Lumen|TrackObjects_TrajectoryY_10,Apical_Lumen|Location_Center_Y,Apical_Lumen|Location_Center_X,Apical_Lumen|Number_Object_Number,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:June5_Pos3
    Overwrite existing files without warning?:No
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